PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Honors Thesis 2023
  keyboardBackend = ioHub
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Routines
  Routine tester
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $Cond
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  Routine CondtionSet
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        INSTRUCTOR:

        Please press "Spacebar" to continue!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_1
      Code Type = Auto->JS
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      Begin Experiment:
        myIndices= expInfo['session']
      Begin Routine:
        myIndices= expInfo['session']
      End Routine:
        myIndices= expInfo['session']
  Routine Instruction
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    TextComponent cond_text
      letterHeight = 0.05
      pos = (0.63,0.45)
      startVal [time (s)] = 0.0
      text [set every repeat] = $CondCheck
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    TextComponent Inst_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will listen to 6 lecture audios and after each lecture you will be assessed on the content of the lecture that you just heard.


        Please press "Spacebar" to begin.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_7
      Code Type = Py
      Before Experiment:
        import serial
        import time

        # Set the correct serial port
        ser = serial.Serial('COM3')

        # Function to send bits to the EEG
        def send_bits(data):
            ser.write(data.encode())

        send_bits('Test!')
        print('Test')
        time.sleep(1)
  Routine ConditionCheck
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $CondCheck
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine T1A
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    SoundComponent sound_1
      sound [set every repeat] = $T1A
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    ImageComponent image_2
      image = Stimuli_HT/FixCross.png
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Each Frame:
        if sound_1.status == FINISHED:
            continueRoutine = False
    KeyboardComponent key_resp_12
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        send_bits('Stim Started!')
      End Routine:
        send_bits('Stim Ended!')
  Routine end
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Experiment Ended

        Please wait for the instructor.
    KeyboardComponent key_resp_6
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine T1Q1
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    ImageComponent T1I1
      image [set every repeat] = $T1Q1
      size = (1.4, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent T1Q1R
      allowedKeys = '1', '2', '3', '4','5'
      correctAns = $CorrT1Q1
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine T1Q2
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    ImageComponent T1I2
      image [set every repeat] = $T1Q2
      size = (1.4, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent T1Q2R
      allowedKeys = '1', '2', '3', '4','5'
      correctAns = $CorrT1Q2
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine T1Q3
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    ImageComponent T1I3
      image [set every repeat] = $T1Q3
      size = (1.4, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent T1Q3R
      allowedKeys = '1', '2', '3', '4','5'
      correctAns = $CorrT1Q3
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine T1Q4
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  Routine T1Q5
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  Routine T1Q6
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  Routine T1Q7
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  Routine T1Q8
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  Routine T1Q9
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  Routine T1Q10
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  Routine T2Q1
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  Routine T2Q2
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  Routine T2Q3
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  Routine T2Q4
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  Routine T2Q5
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  Routine T2Q6
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  Routine T2Q7
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  Routine T2Q8
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  Routine T2Q9
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  Routine T2Q10
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  Routine T3Q1
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  Routine T3Q2
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  Routine T3Q3
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  Routine T3Q4
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  Routine T3Q5
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  Routine T3Q6
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  Routine T3Q7
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  Routine T3Q8
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  Routine T3Q9
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  Routine T3Q10
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  Routine T4Q1
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  Routine T4Q2
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  Routine T4Q3
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  Routine T4Q4
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  Routine T4Q5
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  Routine T4Q6
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  Routine T4Q7
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  Routine T4Q8
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  Routine T4Q9
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  Routine T4Q10
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  Routine T5Q1
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  Routine T5Q2
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  Routine T5Q3
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  Routine T5Q4
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  Routine T5Q6
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  Routine T5Q5
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  Routine T5Q7
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  Routine T5Q8
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  Routine T5Q9
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  Routine T5Q10
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  Routine T6Q1
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  Routine T6Q2
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  Routine T6Q3
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  Routine T6Q4
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  Routine T6Q5
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  Routine T6Q6
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  Routine T6Q7
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  Routine T6Q8
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  Routine T6Q9
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  Routine T6Q10
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  Routine T2A
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    SoundComponent sound_2
      sound [set every repeat] = $T2A
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    ImageComponent image
      image = Stimuli_HT/FixCross.png
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Each Frame:
        if sound_2.status == FINISHED:
            continueRoutine = False
    KeyboardComponent key_resp_11
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SerialOutComponent serialPort_3
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = N
      port = COM3
      startVal [time (s)] = 0.0
      startdata = 1
      stopVal [duration (s)] = .1
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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    SerialOutComponent serialPort_4
      baudrate = 9600
      bytesize = 8
      getResponse = False
      parity = N
      port = COM3
      startVal [time (s)] = 360
      startdata = 1
      stopVal [duration (s)] = .1
      stopbits = 1
      stopdata = 0
      syncScreenRefresh = False
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  Routine T3A
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    SoundComponent sound_3
      sound [set every repeat] = $T3A
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    ImageComponent image_3
      image = Stimuli_HT/FixCross.png
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Each Frame:
        if sound_3.status == FINISHED:
            continueRoutine = False
    KeyboardComponent key_resp_10
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine T4A
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    SoundComponent sound_4
      sound [set every repeat] = $T4A
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    ImageComponent image_4
      image = Stimuli_HT/FixCross.png
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Each Frame:
        if sound_4.status == FINISHED:
            continueRoutine = False
    KeyboardComponent key_resp_9
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine T5A
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    SoundComponent sound_5
      sound [set every repeat] = $T5A
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    ImageComponent image_5
      image = Stimuli_HT/FixCross.png
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    CodeComponent code_5
      Code Type = Auto->JS
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      Each Frame:
        if sound_5.status == FINISHED:
            continueRoutine = False
    KeyboardComponent key_resp_8
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine T6A
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  Routine Trial_Break
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    TextComponent Break_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You can take a break and continue when you are ready.

        Please let the instructor know if you want to leave the booth.

        Press "Spacebar" to continue
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pre_assement_inst
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are now going to complete 10 multiple choice questions on the audio lecture that you just heard.

        Please try to answer questions based on the lecture you heard and avoid using knowledge you already had.

        Press "Spacebar" to continue
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine LNS_MAX
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    TextComponent LNS_MAX_TEXT
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text = LNS_MAX:
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    TextboxComponent LNS_MAX_resp
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent button
      bold = True
      font = Calibri
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -.37)
      size = 0.2,0.1
      startVal [time (s)] = 0
      text = NEXT
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  Routine LNS_RAW
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    TextComponent LNS_RAW_TEXT
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text = LNS_RAW:
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    TextboxComponent LNS_RAW_resp
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
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    ButtonComponent button_2
      bold = True
      font = Calibri
      forceEndRoutine = True
      letterHeight = 0.04
      pos = (0, -.37)
      size = 0.2,0.1
      startVal [time (s)] = 0
      text = NEXT
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  Routine gap
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = please wait
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Flow
  Routine CondtionSet
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $myIndices
    conditionsFile = Stimuli_HT/Honors thesis 2023_rand.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Cond': 'Testing', 'CondCheck': 'Testing:CondCheck', 'T1A': 'Stimuli_HT/A1.wav', 'T2A': 'Stimuli_HT/A2.wav', 'T3A': 'Stimuli_HT/A3.wav', 'T4A': 'Stimuli_HT/A4.wav', 'T5A': 'Stimuli_HT/A5.wav', 'T6A': 'Stimuli_HT/A6.wav', 'T1Q1': 'Stimuli_HT/A1Q1.png', 'CorrT1Q1': 1, 'T1Q2': 'Stimuli_HT/A1Q2.png', 'CorrT1Q2': 5, 'T1Q3': 'Stimuli_HT/A1Q3.png', 'CorrT1Q3': 3, 'T1Q4': 'Stimuli_HT/A1Q4.png', 'CorrT1Q4': 2, 'T1Q5': 'Stimuli_HT/A1Q5.png', 'CorrT1Q5': 3, 'T1Q6': 'Stimuli_HT/A1Q6.png', 'CorrT1Q6': 5, 'T1Q7': 'Stimuli_HT/A1Q7.png', 'CorrT1Q7': 4, 'T1Q8': 'Stimuli_HT/A1Q8.png', 'CorrT1Q8': 5, 'T1Q9': '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,
      {'Cond': 10, 'CondCheck': 10, 'T1A': 'Stimuli_HT/NA2T.wav', 'T2A': 'Stimuli_HT/NA4H.wav', 'T3A': 'Stimuli_HT/NA6.wav', 'T4A': 'Stimuli_HT/A3H.wav', 'T5A': 'Stimuli_HT/A5.wav', 'T6A': 'Stimuli_HT/A1T.wav', 'T1Q1': 'Stimuli_HT/A2Q1.png', 'CorrT1Q1': 5, 'T1Q2': 'Stimuli_HT/A2Q2.png', 'CorrT1Q2': 3, 'T1Q3': 'Stimuli_HT/A2Q3.png', 'CorrT1Q3': 1, 'T1Q4': 'Stimuli_HT/A2Q4.png', 'CorrT1Q4': 2, 'T1Q5': 'Stimuli_HT/A2Q5.png', 'CorrT1Q5': 5, 'T1Q6': 'Stimuli_HT/A2Q6.png', 'CorrT1Q6': 2, 'T1Q7': 'Stimuli_HT/A2Q7.png', 'CorrT1Q7': 4, 'T1Q8': 'Stimuli_HT/A2Q8.png', 'CorrT1Q8': 1, 'T1Q9': 'Stimuli_HT/A2Q9.pn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,
      {'Cond': 3, 'CondCheck': 3, 'T1A': 'Stimuli_HT/A1T.wav', 'T2A': 'Stimuli_HT/A3H.wav', 'T3A': 'Stimuli_HT/A5.wav', 'T4A': 'Stimuli_HT/NA2T.wav', 'T5A': 'Stimuli_HT/NA4H.wav', 'T6A': 'Stimuli_HT/NA6.wav', 'T1Q1': 'Stimuli_HT/A1Q1.png', 'CorrT1Q1': 1, 'T1Q2': 'Stimuli_HT/A1Q2.png', 'CorrT1Q2': 5, 'T1Q3': 'Stimuli_HT/A1Q3.png', 'CorrT1Q3': 3, 'T1Q4': 'Stimuli_HT/A1Q4.png', 'CorrT1Q4': 2, 'T1Q5': 'Stimuli_HT/A1Q5.png', 'CorrT1Q5': 3, 'T1Q6': 'Stimuli_HT/A1Q6.png', 'CorrT1Q6': 5, 'T1Q7': 'Stimuli_HT/A1Q7.png', 'CorrT1Q7': 4, 'T1Q8': 'Stimuli_HT/A1Q8.png', 'CorrT1Q8': 5, 'T1Q9': 'Stimuli_HT/A1Q9.png'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,
      {'Cond': 30, 'CondCheck': 30, 'T1A': 'Stimuli_HT/NA5H.wav', 'T2A': 'Stimuli_HT/NA1.wav', 'T3A': 'Stimuli_HT/NA3T.wav', 'T4A': 'Stimuli_HT/A6.wav', 'T5A': 'Stimuli_HT/A2T.wav', 'T6A': 'Stimuli_HT/A4H.wav', 'T1Q1': 'Stimuli_HT/A5Q1.png', 'CorrT1Q1': 2, 'T1Q2': 'Stimuli_HT/A5Q2.png', 'CorrT1Q2': 5, 'T1Q3': 'Stimuli_HT/A5Q3.png', 'CorrT1Q3': 3, 'T1Q4': 'Stimuli_HT/A5Q4.png', 'CorrT1Q4': 2, 'T1Q5': 'Stimuli_HT/A5Q5.png', 'CorrT1Q5': 4, 'T1Q6': 'Stimuli_HT/A5Q6.png', 'CorrT1Q6': 1, 'T1Q7': 'Stimuli_HT/A5Q7.png', 'CorrT1Q7': 2, 'T1Q8': 'Stimuli_HT/A5Q8.png', 'CorrT1Q8': 5, 'T1Q9': 'Stimuli_HT/A5Q9.pn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
    Routine Instruction
    Routine T1A
    Routine Pre_assement_inst
    Routine T1Q1
    Routine T1Q2
    Routine T1Q3
    Routine T1Q4
    Routine T1Q5
    Routine T1Q6
    Routine T1Q7
    Routine T1Q8
    Routine T1Q9
    Routine T1Q10
    Routine Trial_Break
    Routine T2A
    Routine Pre_assement_inst
    Routine T2Q1
    Routine T2Q2
    Routine T2Q3
    Routine T2Q4
    Routine T2Q5
    Routine T2Q6
    Routine T2Q7
    Routine T2Q8
    Routine T2Q9
    Routine T2Q10
    Routine Trial_Break
    Routine T3A
    Routine Pre_assement_inst
    Routine T3Q1
    Routine T3Q2
    Routine T3Q3
    Routine T3Q4
    Routine T3Q5
    Routine T3Q6
    Routine T3Q7
    Routine T3Q8
    Routine T3Q9
    Routine T3Q10
    Routine Trial_Break
    Routine T4A
    Routine Pre_assement_inst
    Routine T4Q1
    Routine T4Q2
    Routine T4Q3
    Routine T4Q4
    Routine T4Q5
    Routine T4Q6
    Routine T4Q7
    Routine T4Q8
    Routine T4Q9
    Routine T4Q10
    Routine Trial_Break
    Routine T5A
    Routine Pre_assement_inst
    Routine T5Q1
    Routine T5Q2
    Routine T5Q3
    Routine T5Q4
    Routine T5Q5
    Routine T5Q6
    Routine T5Q7
    Routine T5Q8
    Routine T5Q9
    Routine T5Q10
    Routine Trial_Break
    Routine T6A
    Routine Pre_assement_inst
    Routine T6Q1
    Routine T6Q2
    Routine T6Q3
    Routine T6Q4
    Routine T6Q5
    Routine T6Q6
    Routine T6Q7
    Routine T6Q8
    Routine T6Q9
    Routine T6Q10
    Routine end
  LoopTerminator trials
